CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:t(?P<Timepoint>[0-9]+)_F(?P<Site>[0-9]{4})_(?P<Channel>.*)_(?P<Well>[A-Z][0-9]).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "nuclei")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "GFP")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Site

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:nucleus
    Name the primary objects to be identified:nuc
    Typical diameter of objects, in pixel units (Min,Max):20,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:nucleus
    Name the output image:nucleusOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max possible
    How to outline:Inner
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    Select objects to display:nuc

GrayToColor:[module_num:7|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
    Select a color scheme:RGB
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    Select the image to be colored green:actin
    Select the image to be colored blue:nucleusOverlay
    Name the output image:merged
    Relative weight for the red image:0.8
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:merged
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_W\\\\g<Well>_S\\\\g<Site>_T\\\\g<Timepoint>
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Office/Phd/Data/REF52/pix2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Well,Image|Metadata_Site,Image|Metadata_Timepoint,nuc|Number_Object_Number,nuc|Location_Center_Y,nuc|Location_Center_X,nuc|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:REF52
    Overwrite existing files without warning?:No
    Data to export:nuc
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:10|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Users/max
    Cluster root path:/Users/max
